/vis/open OGLIX
/vis/drawVolume					
/vis/viewer/set/viewPointThetaPhi 60 60	
/vis/viewer/zoom 0.5					
/vis/viewer/panTo 0.5 0.5				
/vis/viewer/panTo 0 0					
/vis/viewer/set/background white
/vis/viewer/set/background black			
/vis/scene/add/axes		

/gate/geometry/setMaterialDatabase data/GateMaterials.db

/gate/world/geometry/setXLength 100 cm
/gate/world/geometry/setYLength 100 cm
/gate/world/geometry/setZLength 100 cm

/gate/world/daughters/name small_box
/gate/world/daughters/insert box
/gate/small_box/setMaterial Water
/gate/small_box/geometry/setXLength 1 cm
/gate/small_box/geoemtry/setYLength 5 cm
/gate/small_box/geometry/setZLength 3 cm
/gate/small_box/vis/forceWireframe 0
/gate/small_box/vis/forceSolid 1
/gate/small_box/vis/setColor red

/gate/small_box/daughters/name hole
/gate/small_box/daughters/insert cylinder
/gate/hole/setMaterial Air
/gate/hole/geometry/setRmax 1 cm
/gate/hole/geoemtry/setRmin 0 cm
/gate/hole/geometry/setHeight 3 cm
/gate/hole/vis/forceSolid 1

/geometry/test/run

/gate/hole/geometry/setRmax 0.25 cm
/gate/geometry/rebuild
/geometry/test/run
